OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Run this side for Hilbert based algorithms
  (Have to band pass filter for all required frequencies)
  delta_f = 4Hz

GDF file reader => #0
  Filename = D:/UnityNeurofeedback/a.gdf
  Samples per buffer = 50
  Subtract physical minimum = false
#0.EEG stream -> Timeout
  Timeout delay = 2
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
#0.EEG stream -> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #4
  Method = Imaginary Part of Coherency
  Pairs of channels = 1-2;1-3;2-3
  Channel Matching Method = Smart
  Overlap (percentage) = 50
  Window method = Welch
  Length of segments = 50
Input stream=#4.ImCoherency spectrum -> CSV File Writer
  Filename = D:/UnityNeurofeedback/Tests/CommonInput/case3_ImC.csv
  Precision = 10
  Append data = false
  Only last matrix = false

GDF file reader => #6
  Filename = D:/UnityNeurofeedback/a.gdf
  Samples per buffer = 200
  Subtract physical minimum = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 80
  High Cut-off Frequency (Hz) = 84
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #9
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#9 -> CSV File Writer
  Filename = 80.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 84
  High Cut-off Frequency (Hz) = 88
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #13
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#13 -> CSV File Writer
  Filename = 84.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 88
  High Cut-off Frequency (Hz) = 92
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #17
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#17 -> CSV File Writer
  Filename = 88.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 92
  High Cut-off Frequency (Hz) = 96
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #21
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#21 -> CSV File Writer
  Filename = 92.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 96
  High Cut-off Frequency (Hz) = 100
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #25
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#25 -> CSV File Writer
  Filename = 96.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Timeout
  Timeout delay = 2
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 0
  High Cut-off Frequency (Hz) = 4
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #31
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#31 -> CSV File Writer
  Filename = 0.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #35
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#35 -> CSV File Writer
  Filename = 4.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #39
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#39 -> CSV File Writer
  Filename = 8.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 12
  High Cut-off Frequency (Hz) = 16
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #43
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#43 -> CSV File Writer
  Filename = 12.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 16
  High Cut-off Frequency (Hz) = 20
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #47
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#47 -> CSV File Writer
  Filename = 16.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 20
  High Cut-off Frequency (Hz) = 24
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #51
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#51 -> CSV File Writer
  Filename = 20.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 24
  High Cut-off Frequency (Hz) = 28
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #55
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#55 -> CSV File Writer
  Filename = 24.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 28
  High Cut-off Frequency (Hz) = 32
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #59
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#59 -> CSV File Writer
  Filename = 28.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 32
  High Cut-off Frequency (Hz) = 36
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #63
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#63 -> CSV File Writer
  Filename = 32.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 36
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #67
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#67 -> CSV File Writer
  Filename = 36.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 40
  High Cut-off Frequency (Hz) = 44
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #71
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#71 -> CSV File Writer
  Filename = 40.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 44
  High Cut-off Frequency (Hz) = 48
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #75
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#75 -> CSV File Writer
  Filename = 44.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 48
  High Cut-off Frequency (Hz) = 52
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #79
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#79 -> CSV File Writer
  Filename = 48.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 52
  High Cut-off Frequency (Hz) = 56
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #83
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#83 -> CSV File Writer
  Filename = 52.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 56
  High Cut-off Frequency (Hz) = 60
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #87
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#87 -> CSV File Writer
  Filename = 56.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 60
  High Cut-off Frequency (Hz) = 64
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #91
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#91 -> CSV File Writer
  Filename = 60.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 64
  High Cut-off Frequency (Hz) = 68
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #95
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#95 -> CSV File Writer
  Filename = 64.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 68
  High Cut-off Frequency (Hz) = 72
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #99
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#99 -> CSV File Writer
  Filename = 68.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 72
  High Cut-off Frequency (Hz) = 76
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #103
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#103 -> CSV File Writer
  Filename = 72.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#6.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 76
  High Cut-off Frequency (Hz) = 80
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #107
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2; 1-3; 2-3
  Channel Matching Method = Smart
Input stream=#107 -> CSV File Writer
  Filename = 76.csv
  Precision = 10
  Append data = false
  Only last matrix = false
