OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Run this side for Welch based algorithms
Comment
  Run this side for Hilbert based algorithms
  (Have to band pass filter for all required frequencies)
  delta_f = 4Hz

GDF file reader => #0
  Filename = D:/UnityNeurofeedback/common_reference.gdf
  Samples per buffer = 200
  Subtract physical minimum = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 80
  High Cut-off Frequency (Hz) = 84
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #3
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#3 -> CSV File Writer
  Filename = 80.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 84
  High Cut-off Frequency (Hz) = 88
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #7
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#7 -> CSV File Writer
  Filename = 84.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 88
  High Cut-off Frequency (Hz) = 92
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #11
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#11 -> CSV File Writer
  Filename = 88.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 92
  High Cut-off Frequency (Hz) = 96
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #15
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#15 -> CSV File Writer
  Filename = 92.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 96
  High Cut-off Frequency (Hz) = 100
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #19
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#19 -> CSV File Writer
  Filename = 96.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Timeout
  Timeout delay = 2
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 0
  High Cut-off Frequency (Hz) = 4
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #25
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#25 -> CSV File Writer
  Filename = 0.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #29
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#29 -> CSV File Writer
  Filename = 4.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #33
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#33 -> CSV File Writer
  Filename = 8.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 12
  High Cut-off Frequency (Hz) = 16
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #37
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#37 -> CSV File Writer
  Filename = 12.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 16
  High Cut-off Frequency (Hz) = 20
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #41
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#41 -> CSV File Writer
  Filename = 16.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 20
  High Cut-off Frequency (Hz) = 24
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #45
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#45 -> CSV File Writer
  Filename = 20.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 24
  High Cut-off Frequency (Hz) = 28
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #49
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#49 -> CSV File Writer
  Filename = 24.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 28
  High Cut-off Frequency (Hz) = 32
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #53
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#53 -> CSV File Writer
  Filename = 28.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 32
  High Cut-off Frequency (Hz) = 36
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #57
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#57 -> CSV File Writer
  Filename = 32.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 36
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #61
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#61 -> CSV File Writer
  Filename = 36.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 40
  High Cut-off Frequency (Hz) = 44
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #65
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#65 -> CSV File Writer
  Filename = 40.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 44
  High Cut-off Frequency (Hz) = 48
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #69
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#69 -> CSV File Writer
  Filename = 44.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 48
  High Cut-off Frequency (Hz) = 52
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #73
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#73 -> CSV File Writer
  Filename = 48.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 52
  High Cut-off Frequency (Hz) = 56
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #77
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#77 -> CSV File Writer
  Filename = 52.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 56
  High Cut-off Frequency (Hz) = 60
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #81
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#81 -> CSV File Writer
  Filename = 56.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 60
  High Cut-off Frequency (Hz) = 64
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #85
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#85 -> CSV File Writer
  Filename = 60.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 64
  High Cut-off Frequency (Hz) = 68
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #89
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#89 -> CSV File Writer
  Filename = 64.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 68
  High Cut-off Frequency (Hz) = 72
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #93
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#93 -> CSV File Writer
  Filename = 68.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 72
  High Cut-off Frequency (Hz) = 76
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #97
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#97 -> CSV File Writer
  Filename = 72.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 76
  High Cut-off Frequency (Hz) = 80
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> Connectivity Measure => #101
  Method = Weighted Phase Lag Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
Input stream=#101 -> CSV File Writer
  Filename = 76.csv
  Precision = 10
  Append data = false
  Only last matrix = false

0x341d3912 GDF file reader => #103
  Filename = D:/UnityNeurofeedback/common_reference_none.gdf
  Samples per buffer = 200
  Subtract physical minimum = false
#103.EEG stream -> 0x341d3912 Temporal Filter
  Filter Method = Butterworth
  Filter Type = Low Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 100
  Band Pass Ripple (dB) = 0.5
-> 0x341d3912 Signal Decimation
  Decimation factor = 5
-> 0x341d3912 Time based epoching
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> 0x341d3912 Connectivity Measure => #107
  Method = Magnitude Squared Coherence
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Overlap (percentage) = 50
  Length of segments = 100
Input stream=#107.Coherence spectrum -> 0x341d3912 CSV File Writer
  Filename = 8sec_50samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#103.EEG stream -> 0x341d3912 Timeout
  Timeout delay = 2
  Output Stimulation = OVTK_StimulationId_Label_00
-> 0x341d3912 Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
