OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

GDF file reader => #0
  Filename = D:/UnityNeurofeedback/common_reference_none.gdf
  Samples per buffer = 200
  Subtract physical minimum = false
#0.EEG stream -> Timeout
  Timeout delay = 2
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
#0.EEG stream -> 0x341d3912 Time based epoching => #3
  Epoch duration (in sec) = 2
  Epoch intervals (in sec) = 2
-> 0x341d3912 Connectivity Measure => #4
  Method = Phase Slope Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 5
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#4.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = 2sec_5samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#3 -> 0x341d3912 Connectivity Measure => #6
  Method = Phase Slope Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 10
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#6.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = 2sec_10samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#3 -> 0x341d3912 Connectivity Measure => #8
  Method = Phase Slope Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 50
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#8.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = 2sec_50samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#3 -> 0x341d3912 Connectivity Measure => #10
  Method = Phase Slope Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 100
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#10.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = 2sec_100samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#3 -> 0x341d3912 Connectivity Measure => #12
  Method = Phase Slope Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 400
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#12.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = 2sec_400samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> 0x341d3912 Time based epoching => #14
  Epoch duration (in sec) = 8
  Epoch intervals (in sec) = 8
-> 0x341d3912 Connectivity Measure => #15
  Method = Magnitude Squared Coherence
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Overlap (percentage) = 50
  Length of segments = 5
Input stream=#15.Coherence spectrum -> 0x341d3912 CSV File Writer
  Filename = 8sec_5samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#14 -> 0x341d3912 Connectivity Measure => #17
  Method = Magnitude Squared Coherence
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Overlap (percentage) = 50
  Length of segments = 10
Input stream=#17.Coherence spectrum -> 0x341d3912 CSV File Writer
  Filename = 8sec_10samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#14 -> 0x341d3912 Connectivity Measure => #19
  Method = Magnitude Squared Coherence
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Overlap (percentage) = 50
  Length of segments = 50
Input stream=#19.Coherence spectrum -> 0x341d3912 CSV File Writer
  Filename = 8sec_50samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#14 -> 0x341d3912 Connectivity Measure => #21
  Method = Magnitude Squared Coherence
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Overlap (percentage) = 50
  Length of segments = 100
Input stream=#21.Coherence spectrum -> 0x341d3912 CSV File Writer
  Filename = 8sec_100samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#14 -> 0x341d3912 Connectivity Measure => #23
  Method = Magnitude Squared Coherence
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Overlap (percentage) = 50
  Length of segments = 400
Input stream=#23.Coherence spectrum -> 0x341d3912 CSV File Writer
  Filename = 8sec_400samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> 0x341d3912 Time based epoching => #25
  Epoch duration (in sec) = 4
  Epoch intervals (in sec) = 4
-> 0x341d3912 Connectivity Measure => #26
  Method = Phase Slope Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 5
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#26.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = 4sec_5samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#25 -> 0x341d3912 Connectivity Measure => #28
  Method = Phase Slope Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 10
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#28.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = 4sec_10samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#25 -> 0x341d3912 Connectivity Measure => #30
  Method = Phase Slope Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 50
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#30.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = 4sec_50samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#25 -> 0x341d3912 Connectivity Measure => #32
  Method = Phase Slope Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 100
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#32.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = 4sec_100samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#25 -> 0x341d3912 Connectivity Measure => #34
  Method = Phase Slope Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 400
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#34.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = 4sec_400samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> 0x341d3912 Time based epoching => #36
  Epoch duration (in sec) = 16
  Epoch intervals (in sec) = 16
-> 0x341d3912 Connectivity Measure => #37
  Method = Phase Slope Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 5
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#37.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = 16sec_5samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#36 -> 0x341d3912 Connectivity Measure => #39
  Method = Phase Slope Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 10
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#39.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = 16sec_10samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#36 -> 0x341d3912 Connectivity Measure => #41
  Method = Phase Slope Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 50
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#41.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = 16sec_50samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#36 -> 0x341d3912 Connectivity Measure => #43
  Method = Phase Slope Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 100
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#43.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = 16sec_100samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#36 -> 0x341d3912 Connectivity Measure => #45
  Method = Phase Slope Index
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 400
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#45.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = 16sec_400samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.EEG stream -> Time based epoching => #47
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 1
-> 0x341d3912 Connectivity Measure => #48
  Method = Magnitude Squared Coherence
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Overlap (percentage) = 50
  Length of segments = 5
Input stream=#48.Coherence spectrum -> 0x341d3912 CSV File Writer
  Filename = 1sec_5samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#47 -> 0x341d3912 Connectivity Measure => #50
  Method = Magnitude Squared Coherence
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Overlap (percentage) = 50
  Length of segments = 10
Input stream=#50.Coherence spectrum -> 0x341d3912 CSV File Writer
  Filename = 1sec_10samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#47 -> 0x341d3912 Connectivity Measure => #52
  Method = Magnitude Squared Coherence
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Overlap (percentage) = 50
  Length of segments = 50
Input stream=#52.Coherence spectrum -> 0x341d3912 CSV File Writer
  Filename = 1sec_50samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#47 -> 0x341d3912 Connectivity Measure => #54
  Method = Magnitude Squared Coherence
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Overlap (percentage) = 50
  Length of segments = 100
Input stream=#54.Coherence spectrum -> 0x341d3912 CSV File Writer
  Filename = 1sec_100samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#47 -> Connectivity Measure => #56
  Method = Magnitude Squared Coherence
  Pairs of channels = 1-2
  Channel Matching Method = Smart
  Window method = Welch
  Overlap (percentage) = 50
  Length of segments = 400
Input stream=#56.Coherence spectrum -> CSV File Writer
  Filename = 1sec_400samples.csv
  Precision = 10
  Append data = false
  Only last matrix = false
