OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Connectivity for
  channels 1-10
  (1-*, 2-*, ..., 10-*)
Comment
  Connectivity for
  channels 11-20
Comment
  Connectivity for
  channels 21-30
Comment
  Connectivity for
  channels 31-40
Comment
  Connectivity for
  channels 41-50
Comment
  Connectivity for
  channels 1-10
  (1-*, 2-*, ..., 10-*)
Comment
  Connectivity for
  channels 11-20
Comment
  Connectivity for
  channels 21-30
Comment
  Connectivity for
  channels 31-40
Comment
  Connectivity for
  channels 41-50

GDF file reader => #0
  Filename = D:/4Windows/gdf files/test1.gdf
  Samples per buffer = 50
  Subtract physical minimum = false
#0.EEG stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 35
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Time based epoching => #2
  Epoch duration (in sec) = 4
  Epoch intervals (in sec) = 4
-> Connectivity Measure => #3
  Method = Weighted Phase Lag Index
  Pairs of channels = 1:10-*
  Channel Matching Method = Smart
Input stream=#3 -> CSV File Writer
  Filename = C:/Users/eeguser/Desktop/channel1-10.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#2 -> Connectivity Measure => #5
  Method = Weighted Phase Lag Index
  Pairs of channels = 11:20-*
  Channel Matching Method = Smart
Input stream=#5 -> CSV File Writer
  Filename = C:/Users/eeguser/Desktop/channel11-20.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#2 -> Connectivity Measure => #7
  Method = Weighted Phase Lag Index
  Pairs of channels = 21:30-*
  Channel Matching Method = Smart
Input stream=#7 -> CSV File Writer
  Filename = C:/Users/eeguser/Desktop/channel21-30.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#2 -> Connectivity Measure => #9
  Method = Weighted Phase Lag Index
  Pairs of channels = 31:40-*
  Channel Matching Method = Smart
Input stream=#9 -> CSV File Writer
  Filename = C:/Users/eeguser/Desktop/channel31-40.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#2 -> Connectivity Measure => #11
  Method = Weighted Phase Lag Index
  Pairs of channels = 41:50-*
  Channel Matching Method = Smart
Input stream=#11 -> CSV File Writer
  Filename = C:/Users/eeguser/Desktop/channel41-50.csv
  Precision = 10
  Append data = false
  Only last matrix = false

0x341d3912 GDF file reader => #13
  Filename = D:/4Windows/gdf files/test2.gdf
  Samples per buffer = 100
  Subtract physical minimum = false
#13.EEG stream -> 0x341d3912 Time based epoching => #14
  Epoch duration (in sec) = 4
  Epoch intervals (in sec) = 4
-> 0x341d3912 Connectivity Measure => #15
  Method = Phase Slope Index
  Pairs of channels = 1:10-*
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 40
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#15.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = C:/Users/eeguser/Desktop/channel1-10.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#14 -> 0x341d3912 Connectivity Measure => #17
  Method = Phase Slope Index
  Pairs of channels = 11:20-*
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 40
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#17.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = C:/Users/eeguser/Desktop/channel11-20.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#14 -> 0x341d3912 Connectivity Measure => #19
  Method = Phase Slope Index
  Pairs of channels = 21:30-*
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 40
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#19.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = C:/Users/eeguser/Desktop/channel21-30.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#14 -> 0x341d3912 Connectivity Measure => #21
  Method = Phase Slope Index
  Pairs of channels = 31:40-*
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 40
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#21.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = C:/Users/eeguser/Desktop/channel31-40.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#14 -> 0x341d3912 Connectivity Measure => #23
  Method = Phase Slope Index
  Pairs of channels = 41:50-*
  Channel Matching Method = Smart
  Window method = Welch
  Length of segments = 40
  Frequency window = 2
  Overlap (percentage) = 50
Input stream=#23.PSI spectrum -> 0x341d3912 CSV File Writer
  Filename = C:/Users/eeguser/Desktop/channel41-50.csv
  Precision = 10
  Append data = false
  Only last matrix = false
